begin model
    begin parameters

      #Volume
      V 0.5
      # Conversion to 1/um^3
      NaV 602*V
      # Initial concentrations
      L 15#*NaV
      A 3#*NaV
      K 0.22316271936261323#*NaV
      P 0.3006457135166055#*NaV
      # Rates
      ka1 0.0891841061405337/NaV
      kb1 7.686604351412696
      kcat1 500
      Km1 (kb1 + kcat1)/ka1
      ka2 0.0033210781343476934/NaV
      kb2 1.8274442883567392
      ka3 0.050042137015268634/NaV
      kb3 379.79344838656317
      ka4 0.0005253224152058502/NaV
      kb4 0.49574586107169005
      ka7 0.0033210781343476934/NaV
      kb7 13.266634054571963
      kcat7 33.91475227547318
      Km7 (kb7 + kcat7)/ka7
    end parameters
    begin molecule types
      pip2(head~U~P)
      ap2(m2muh,sy)
      kin(pi,ap)
      syn(pi,ap)
    end molecule types
    begin species
      pip2(head~U) L
      ap2(m2muh,sy) A
      kin(pi,ap) K
      syn(pi,ap) P
    end species
   begin observables
     Molecules Lfree pip2(head~U)
     Molecules Lp pip2(head~P)
     Molecules Afree ap2(m2muh,sy)
     Molecules Kfree kin(pi,ap)
     Molecules Pfree syn(pi,ap)
     Molecules LK kin(pi!1).pip2(head~U!1)
     Molecules LpA ap2(m2muh!1).pip2(head~P!1)
     Molecules LpAK kin(ap!1).ap2(sy!1,m2muh!2).pip2(head~P!2)
     Molecules LpAP syn(ap!1).ap2(sy!1,m2muh!2).pip2(head~P!2)
     Molecules PLp syn(pi!1).pip2(head~P!1)

   end observables
   begin reaction rules
    #reaction 1 L + K --> Lp + K
     R1: kin(pi) + pip2(head~U) -> kin(pi) + pip2(head~P) kcat1/(Km1+Lfree)
     #R1: kin(pi) + pip2(head~U) <-> kin(pi!1).pip2(head~U!1) ka1, kb1
     #R1a: kin(pi!1).pip2(head~P!1) -> kin(pi) + pip2(head~P) kb1
     #R1b: kin(pi!1).pip2(head~U!1) -> kin(pi!1).pip2(head~P!1) kcat1
     #reaction 2 Lp + A <-> LpA
     R2: ap2(m2muh) + pip2(head~P) <-> ap2(m2muh!1).pip2(head~P!1) ka2, kb2
     #reaction 3 K + AP2 <-> K-AP2
     R3: kin(ap) + ap2(sy,m2muh!?) <-> kin(ap!1).ap2(sy!1,m2muh!?) ka3, kb3
     #reaction 4 P + AP2 <-> P-AP2
     R4: syn(ap) + ap2(sy,m2muh!?) <-> syn(ap!1).ap2(sy!1,m2muh!?) ka4, kb4
     #reaction 7 Lp + P --> L + P
     R7: syn(pi) + pip2(head~P) -> syn(pi) + pip2(head~U) kcat7/(Km7+Lp)
     #R7: syn(pi) + pip2(head~P) <-> syn(pi!1).pip2(head~P!1) ka7, kb7
     #R7a: syn(pi!1).pip2(head~U!1) -> syn(pi) + pip2(head~U) kb7
     #R7b: syn(pi!1).pip2(head~P!1) -> syn(pi!1).pip2(head~U!1) kcat7
   end reaction rules
end model
   
simulate({method=>"ode", t_end=>100,n_steps=>10000})
   